PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '261', 'eeg_port': '', 'trigger_pulse_ms': '5'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Use version = 2026.1.3
  Window size (pixels) = (1200, 800)
  color = $(1.0000, 1.0000, 1.0000)
  expName = recovery_261_first80
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine RunRecovery
    RoutineSettingsComponent RunRecovery
      color = $[1,1,1]
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    CodeComponent run_recovery_code
      Code Type = Py
      Begin Routine:
        from pathlib import Path
        import importlib.util
        import sys

        module_path = Path(_thisDir) / "recovery_261_first80.py"
        spec = importlib.util.spec_from_file_location("recovery_261_first80_module", str(module_path))
        recovery_module = importlib.util.module_from_spec(spec)
        sys.modules["recovery_261_first80_module"] = recovery_module
        spec.loader.exec_module(recovery_module)
        recovery_module.run_from_builder(win, expInfo)
        continueRoutine = False
Flow
  Routine RunRecovery
