PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'list': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(1.0000, 1.0000, 1.0000)
  expName = gurung
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    SoundComponent instruction
      forceEndRoutine = False
      sound [set every repeat] = Audio/sequence_instr.wav
      startVal [condition] = False
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent replay
      Code Type = Py
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      Each Frame:
        keys = key_resp.getKeys(['return','space'], waitRelease=False)

        if 'return' in [k.name for k in keys]:
            instruction.play()

        if 'space' in [k.name for k in keys]:
            continueRoutine = False
    ImageComponent sound_icon
      image = Stimuli/sound.png
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine PracticeEnd
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent practice_done
      forceEndRoutine = False
      sound [set every repeat] = Audio/practice_end.wav
      startVal [time (s)] = 1.0
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    ImageComponent sound_icon_2
      image = Stimuli/sound.png
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine EndExperiment
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = Stimuli/finish.png
      size = (1.2, 0.53)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine TrialPic1
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    ImageComponent pic1
      image [set every repeat] = $img1
      pos = (-0.5, 0)
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent pic2
      image [set every repeat] = $img2
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent pic3
      image [set every repeat] = $img3
      pos = (0.5, 0)
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent arrow12
      image = C:/Users/Sofya/Documents/GurungPsychopy/Stimuli/arrow.png
      pos = (-0.25, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent arrow23
      image = C:/Users/Sofya/Documents/GurungPsychopy/Stimuli/arrow.png
      pos = (0.25, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mask1
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    PolygonComponent mask2
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    PolygonComponent mask3
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      pos = (0.5, 0)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    CodeComponent flow
      Code Type = Py
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      Begin Routine:
        isPractice = bool(showArrows)

        pic1.opacity = 1
        pic2.opacity = 1
        pic3.opacity = 1

        # pic1 already revealed
        mask1.opacity = 0

        # pic2 and pic3 still hidden
        mask2.opacity = 1
        mask3.opacity = 1

        arrow12.opacity = 1 if isPractice else 0
        arrow23.opacity = 1 if isPractice else 0
    MicrophoneComponent mic1
      deviceLabel = Micro
      outputType = wav
      policyWhenFull [set every repeat] = warn
      speakTimes = False
      startVal [time (s)] = 0
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent kb1
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine TrialPic2
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    ImageComponent pic1_2
      image [set every repeat] = $img1
      pos = (-0.5, 0)
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent pic2_2
      image [set every repeat] = $img2
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent pic3_2
      image [set every repeat] = $img3
      pos = (0.5, 0)
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent arrow12_2
      image = C:/Users/Sofya/Documents/GurungPsychopy/Stimuli/arrow.png
      pos = (-0.25, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent arrow23_2
      image = C:/Users/Sofya/Documents/GurungPsychopy/Stimuli/arrow.png
      pos = (0.25, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mask1_2
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    PolygonComponent mask2_2
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    PolygonComponent mask3_2
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      pos = (0.5, 0)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    CodeComponent flow_2
      Code Type = Py
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      Begin Routine:
        isPractice = bool(showArrows)

        pic1_2.opacity = 1
        pic2_2.opacity = 1
        pic3_2.opacity = 1

        # pic1 and pic2 revealed
        mask1_2.opacity = 0
        mask2_2.opacity = 0

        # pic3 still hidden
        mask3_2.opacity = 1

        arrow12_2.opacity = 1 if isPractice else 0
        arrow23_2.opacity = 1 if isPractice else 0
    MicrophoneComponent mic2
      deviceLabel = Micro
      outputType = wav
      policyWhenFull [set every repeat] = warn
      speakTimes = False
      startVal [time (s)] = 0
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent kb2
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine TrialPic3
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    ImageComponent pic1_3
      image [set every repeat] = $img1
      pos = (-0.5, 0)
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent pic2_3
      image [set every repeat] = $img2
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent pic3_3
      image [set every repeat] = $img3
      pos = (0.5, 0)
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent arrow12_3
      image = C:/Users/Sofya/Documents/GurungPsychopy/Stimuli/arrow.png
      pos = (-0.25, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent arrow23_3
      image = C:/Users/Sofya/Documents/GurungPsychopy/Stimuli/arrow.png
      pos = (0.25, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mask1_3
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    PolygonComponent mask2_3
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    PolygonComponent mask3_3
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      pos = (0.5, 0)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    SoundComponent snd_3
      forceEndRoutine = False
      sound [set every repeat] = Audio/tsakyali.wav
      startVal [time (s)] = 999
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    CodeComponent flow_3
      Code Type = Py
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      Begin Routine:
        isPractice = bool(showArrows)

        keepEarlierPics = False
        if isPractice and PracticeLoop.thisN < 3:
            keepEarlierPics = True

        state3 = 0   # 0 waiting for first press, 1 audio playing, 2 pic3 shown

        recordingStarted = False

        event.clearEvents()

        pic1_3.opacity = 1
        pic2_3.opacity = 1
        pic3_3.opacity = 1

        mask1_3.opacity = 0
        mask2_3.opacity = 0
        mask3_3.opacity = 1

        arrow12_3.opacity = 1 if isPractice else 0
        arrow23_3.opacity = 1 if isPractice else 0

        audioClock = core.Clock()
        audioDur = 0.0
      Each Frame:
        keys = event.getKeys(keyList=['space'])

        # First SPACE
        if state3 == 0 and len(keys) > 0:

            if isPractice:
                snd_3.stop()
                snd_3.play()
                mic3.start()

                recordingStarted = True
                audioClock.reset()
                audioDur = snd_3.getDuration()
                state3 = 1

                event.clearEvents()

            else:
                pic1_3.opacity = 0
                pic2_3.opacity = 0
                mask1_3.opacity = 1
                mask2_3.opacity = 1

                mask3_3.opacity = 0
                mic3.start()

                recordingStarted = True
                state3 = 2

                event.clearEvents()


        # Practice: reveal pic3 automatically after audio
        if state3 == 1:
            if audioClock.getTime() >= audioDur:

                if not keepEarlierPics:
                    pic1_3.opacity = 0
                    pic2_3.opacity = 0
                    mask1_3.opacity = 1
                    mask2_3.opacity = 1

                mask3_3.opacity = 0
                state3 = 2

                event.clearEvents()


        # Final SPACE
        if state3 == 2:
            endKeys = event.getKeys(keyList=['space'])
            if len(endKeys) > 0:
                if recordingStarted:
                    mic3.stop()
                continueRoutine = False
    MicrophoneComponent mic3
      deviceLabel = Micro
      outputType = wav
      policyWhenFull [set every repeat] = warn
      speakTimes = False
      startVal [time (s)] = 999
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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  Routine Fixation
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    PolygonComponent bggrey
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent kb_fix
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
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    KeyboardComponent kb_br
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = Stimuli/break.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine SetUpMain
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import numpy as np
        from psychopy import data as psychData

        # MUST match your loop Conditions field (same folder/name pattern)
        condsFile = 'conds/trials_list%d.csv' % int(expInfo['list'])

        trialList = psychData.importConditions(condsFile)
        nTrialsTotal = len(trialList)

        order = np.random.permutation(nTrialsTotal)
        half = nTrialsTotal // 2

        rowsFirstHalf = order[:half].tolist()
        rowsSecondHalf = order[half:].tolist()

        print("List:", expInfo['list'], "Total trials:", nTrialsTotal,
              "First:", len(rowsFirstHalf), "Second:", len(rowsSecondHalf))
  Routine AllMasked
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    ImageComponent pic1_4
      image [set every repeat] = $img1
      pos = (-0.5, 0)
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent pic2_4
      image [set every repeat] = $img2
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent pic3_4
      image [set every repeat] = $img3
      pos = (0.5, 0)
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    ImageComponent arrow12_4
      image = C:/Users/Sofya/Documents/GurungPsychopy/Stimuli/arrow.png
      pos = (-0.25, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent arrow23_4
      image = C:/Users/Sofya/Documents/GurungPsychopy/Stimuli/arrow.png
      pos = (0.25, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mask1_4
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    PolygonComponent mask2_4
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    PolygonComponent mask3_4
      fillColor = $(0.0039, 0.0039, 0.0039)
      lineColor = $(0.0039, 0.0039, 0.0039)
      pos = (0.5, 0)
      shape = rectangle
      size = (0.38, 0.57)
      startVal [time (s)] = 0.0
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    CodeComponent flow_4
      Code Type = Py
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      Begin Routine:
        isPractice = bool(showArrows)

        pic1_4.opacity = 1
        pic2_4.opacity = 1
        pic3_4.opacity = 1

        mask1_4.opacity = 1
        mask2_4.opacity = 1
        mask3_4.opacity = 1

        arrow12_4.opacity = 1 if isPractice else 0
        arrow23_4.opacity = 1 if isPractice else 0
    KeyboardComponent kb1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator PracticeLoop loopType="TrialHandler"
    conditionsFile = Conds/practice.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img1', 'Stimuli/pr1_1.png'), ('img2', 'Stimuli/pr1_2.png'), ('img3', 'Stimuli/pr1_3.png'), ('cond', np.int64(0)), ('showArrows', np.int64(1)), ('setID', np.int64(0))]),
      OrderedDict([('img1', 'Stimuli/pr2_1.png'), ('img2', 'Stimuli/pr2_2.png'), ('img3', 'Stimuli/pr2_3.png'), ('cond', np.int64(0)), ('showArrows', np.int64(1)), ('setID', np.int64(0))]),
      OrderedDict([('img1', 'Stimuli/pr3_1.png'), ('img2', 'Stimuli/pr3_2.png'), ('img3', 'Stimuli/pr3_3.png'), ('cond', np.int64(0)), ('showArrows', np.int64(1)), ('setID', np.int64(0))]),
      OrderedDict([('img1', 'Stimuli/pr4_1.png'), ('img2', 'Stimuli/pr4_2.png'), ('img3', 'Stimuli/pr4_3.png'), ('cond', np.int64(0)), ('showArrows', np.int64(1)), ('setID', np.int64(0))]),
      OrderedDict([('img1', 'Stimuli/pr5_1.png'), ('img2', 'Stimuli/pr5_2.png'), ('img3', 'Stimuli/pr5_3.png'), ('cond', np.int64(0)), ('showArrows', np.int64(1)), ('setID', np.int64(0))]),
      OrderedDict([('img1', 'Stimuli/pr6_1.png'), ('img2', 'Stimuli/pr6_2.png'), ('img3', 'Stimuli/pr6_3.png'), ('cond', np.int64(0)), ('showArrows', np.int64(1)), ('setID', np.int64(0))]),
      OrderedDict([('img1', 'Stimuli/pr7_1.png'), ('img2', 'Stimuli/pr7_2.png'), ('img3', 'Stimuli/pr7_3.png'), ('cond', np.int64(0)), ('showArrows', np.int64(1)), ('setID', np.int64(0))]),
      OrderedDict([('img1', 'Stimuli/pr8_1.png'), ('img2', 'Stimuli/pr8_2.png'), ('img3', 'Stimuli/pr8_3.png'), ('cond', np.int64(0)), ('showArrows', np.int64(1)), ('setID', np.int64(0))])]
    Routine AllMasked
    Routine TrialPic1
    Routine TrialPic2
    Routine TrialPic3
    Routine Fixation
  LoopTerminator PracticeLoop
  Routine PracticeEnd
  Routine SetUpMain
  LoopInitiator TrialLoop1 loopType="TrialHandler"
    Selected rows = $rowsFirstHalf
    conditionsFile = $'Conds/trials_list%d.csv' % int(expInfo['list'])
    loopType = sequential
    nReps = 1
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    Routine AllMasked
    Routine TrialPic1
    Routine TrialPic2
    Routine TrialPic3
    Routine Fixation
  LoopTerminator TrialLoop1
  Routine Break
  LoopInitiator TrialLoop2 loopType="TrialHandler"
    Selected rows = $rowsSecondHalf
    conditionsFile = $'Conds/trials_list%d.csv' % int(expInfo['list'])
    loopType = sequential
    nReps = 1
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    Routine AllMasked
    Routine TrialPic1
    Routine TrialPic2
    Routine TrialPic3
    Routine Fixation
  LoopTerminator TrialLoop2
  Routine EndExperiment
