PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Window size (pixels) = (1200, 800)
  color = $(1.0000, 1.0000, 1.0000)
  expName = gurung_120_v1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      color = $[1,1,1]
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    ImageComponent Instructions_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent instructions_code
      Code Type = Py
      Begin Experiment:
        from pathlib import Path
        import csv
        import gc
        import queue
        import random as _gurung_random
        import threading

        try:
            from psychopy.hardware.speaker import SpeakerDevice
        except Exception as _gurung_speaker_import_error:
            SpeakerDevice = None
            print("SpeakerDevice import failed:", _gurung_speaker_import_error)

        try:
            import numpy as _gurung_np
            import sounddevice as _gurung_sd
            import soundfile as _gurung_sf
            G_RECORDING_AVAILABLE = True
        except Exception as _gurung_recording_error:
            G_RECORDING_AVAILABLE = False
            print("Audio recording is unavailable:", _gurung_recording_error)

        try:
            from PIL import Image as _gurung_Image
            from PIL import ImageOps as _gurung_ImageOps
        except Exception as _gurung_image_import_error:
            _gurung_Image = None
            _gurung_ImageOps = None
            print("Image metadata reading is unavailable:", _gurung_image_import_error)

        G_ROOT = Path(_thisDir)
        G_DATA_DIR = G_ROOT / "data"
        G_RECORDINGS_ROOT = G_ROOT / "recordings"
        G_RECORDINGS_DIR = None
        G_DEBUG_LOG = G_ROOT / "debug_gurung_runtime.log"
        G_DATA_DIR.mkdir(exist_ok=True)
        G_RECORDINGS_ROOT.mkdir(exist_ok=True)
        G_IMAGE_ASPECT = 2.0 / 3.0
        G_SEQUENCE_SIDE_STEPS = 2
        G_SEQUENCE_X_MARGIN = 0.02
        G_SEQUENCE_Y_MARGIN = 0.05
        G_SEQUENCE_GAP_RATIO = 0.12
        G_SEQUENCE_SIZE_COUNT = 5
        G_SEQUENCE_JITTER_POSITIONS = (
            (-0.035, -0.018),
            (-0.012, -0.018),
            (0.012, -0.018),
            (0.035, -0.018),
            (-0.035, 0.018),
            (-0.012, 0.018),
            (0.012, 0.018),
            (0.035, 0.018),
        )
        G_SEQUENCE_JITTER_STATE = {"bag": []}
        G_ARROW_MAX_SIZE = 0.045
        G_MAIN_TRIAL_INDEX = 0
        G_PRACTICE_TRIAL_INDEX = 0
        G_SPEAKER = None
        G_FULLSCREEN_CACHE = {"stim": None}
        G_BETWEEN_IMAGE_EXTS = {".jpg", ".jpeg", ".png", ".bmp"}
        G_BETWEEN_STATE = {"images": [], "index": 0}
        G_MAIN_RUNTIME_STATE = {"prepared": False, "files": []}
        G_AUDIO_PROBE_FILES = (
            "Audio/tsakyali.wav",
            "Audio/bucketdog_noerg.wav",
            "Audio/chickencorn_erg.wav",
        )
        G_AUDIO_PROBE_RATE = 0.10
        G_AUDIO_PROBE_LOCK_SEC = 10
        G_AUDIO_SPEAKER_IMAGE = "Stimuli/sound.png"
        G_AUDIO_SPEAKER_SIZE = (0.22, 0.22)
        G_RECORDING_STOP_GRACE_SEC = 0.6
        G_MAIN_BLOCK_SIZE = 40
        G_PRACTICE_TRIAL_COUNT = 10
        G_PRACTICE_PICTURE_AUDIO = {
            1: {
                0: "Audio/tsakyali.wav",
                1: "Audio/bucketdog_noerg.wav",
                2: "Audio/chickencorn_erg.wav",
            },
            2: {
                0: "Audio/tsakyali.wav",
                1: "Audio/bucketdog_noerg.wav",
                2: "Audio/chickencorn_erg.wav",
            },
        }
        G_PRACTICE_AFTER_TRIAL_AUDIO = {
            2: "Audio/practice_end.wav",
            4: "Audio/tsakyali.wav",
            7: "Audio/bucketdog_noerg.wav",
            10: "Audio/chickencorn_erg.wav",
        }
        G_PRACTICE_SPEAKER_SCREEN_AFTER_TRIALS = {2}


        def g_log(message):
            text = f"{core.getTime():.3f} {message}"
            print(text)
            try:
                with G_DEBUG_LOG.open("a", encoding="utf-8") as handle:
                    handle.write(text + "\n")
            except Exception:
                pass

        try:
            event.globalKeys.add(key="escape", func=core.quit, name="gurung_escape_quit")
        except Exception as _gurung_global_key_error:
            g_log(f"Global escape key was not registered: {_gurung_global_key_error}")


        def g_is_blank(value):
            if value is None:
                return True
            text = str(value).strip()
            return text == "" or text.lower() in {"none", "nan", "null"}


        def g_text(value):
            if g_is_blank(value):
                return ""
            return str(value).strip()


        def g_float(value, default=0.0):
            if g_is_blank(value):
                return default
            try:
                return float(value)
            except Exception:
                return default


        def g_practice_picture_audio(trial_index, segment_index):
            trial_audio = G_PRACTICE_PICTURE_AUDIO.get(trial_index, {})
            return trial_audio.get(segment_index, "")


        def g_practice_pre_picture_audio(trial_index, segment_index, image_count):
            if trial_index not in G_PRACTICE_PICTURE_AUDIO and segment_index == image_count - 1:
                return "Audio/tsakyali.wav"
            return ""


        def g_int(value, default=0):
            if g_is_blank(value):
                return default
            try:
                return int(float(value))
            except Exception:
                return default


        def g_path(value):
            value = g_text(value)
            if not value:
                return ""
            path = Path(value)
            if path.is_absolute():
                return str(path)
            return str(G_ROOT / path)


        def g_window_aspect(win):
            try:
                return max(float(win.size[0]) / float(win.size[1]), 1.0)
            except Exception:
                return 1.5


        def g_image_aspect(path):
            if _gurung_Image is None:
                return None
            try:
                with _gurung_Image.open(path) as image:
                    if _gurung_ImageOps is not None:
                        image = _gurung_ImageOps.exif_transpose(image)
                    width, height = image.size
                if width > 0 and height > 0:
                    return float(width) / float(height)
            except Exception as err:
                g_log(f"image_aspect_warning {path}: {err}")
            return None


        def g_fullscreen_size(win, image_path):
            screen_aspect = g_window_aspect(win)
            image_aspect = g_image_aspect(image_path)
            if not image_aspect:
                return (screen_aspect, 1.0)
            if image_aspect >= screen_aspect:
                return (screen_aspect, screen_aspect / image_aspect)
            return (image_aspect, 1.0)


        def g_fullscreen_image(win, image_value):
            path = g_path(image_value)
            old_stim = G_FULLSCREEN_CACHE.get("stim")
            if old_stim is not None:
                try:
                    old_stim.clearTextures()
                except Exception:
                    pass
            g_log(f"load_fullscreen_image {path}")
            stim = visual.ImageStim(
                win,
                image=path,
                pos=(0, 0),
                size=g_fullscreen_size(win, path),
                interpolate=True,
            )
            G_FULLSCREEN_CACHE["stim"] = stim
            return stim


        def g_audio_speaker_image(win):
            return visual.ImageStim(
                win,
                image=g_path(G_AUDIO_SPEAKER_IMAGE),
                pos=(0, 0),
                size=G_AUDIO_SPEAKER_SIZE,
                interpolate=True,
            )


        def g_release_fullscreen_image(stim):
            g_release_stims([stim])
            if G_FULLSCREEN_CACHE.get("stim") is stim:
                G_FULLSCREEN_CACHE["stim"] = None


        def g_init_between_images():
            between_dir = G_ROOT / "BetweenTrials"
            practice_images = set()
            try:
                for row in data.importConditions("Conds/practice.csv"):
                    image_value = g_text(row.get("between_image", "")).replace("\\", "/")
                    if image_value:
                        practice_images.add(image_value)
            except Exception as err:
                g_log(f"Could not reserve practice between-trial images: {err}")
            images = []
            try:
                for path in sorted(between_dir.iterdir()):
                    if path.is_file() and path.suffix.lower() in G_BETWEEN_IMAGE_EXTS:
                        image_value = f"BetweenTrials/{path.name}"
                        if image_value not in practice_images:
                            images.append(image_value)
            except Exception as err:
                raise RuntimeError(f"Could not list between-trial images in {between_dir}: {err}")
            if not images:
                raise RuntimeError(f"No between-trial images found in {between_dir}")
            _gurung_random.shuffle(images)
            G_BETWEEN_STATE["images"] = images
            G_BETWEEN_STATE["index"] = 0
            g_log(f"runtime_between_images_shuffled count={len(images)} reserved_practice={len(practice_images)}")


        def g_next_between_image():
            images = G_BETWEEN_STATE.get("images") or []
            index = int(G_BETWEEN_STATE.get("index") or 0)
            if index >= len(images):
                raise RuntimeError(f"No unused between-trial images remain: used {index}, available {len(images)}")
            image_value = images[index]
            G_BETWEEN_STATE["index"] = index + 1
            g_log(f"runtime_between_image {index + 1}/{len(images)} {image_value}")
            return image_value


        def g_prepare_runtime_main_blocks():
            if G_MAIN_RUNTIME_STATE.get("prepared"):
                return
            rows = list(data.importConditions("Conds/main_all_120.csv"))
            if not rows:
                raise RuntimeError("No main trials found in Conds/main_all_120.csv")
            _gurung_random.shuffle(rows)
            g_assign_runtime_audio_probes(rows)
            fieldnames = list(rows[0].keys())
            block_files = []
            block_sizes = []
            for block_index in range(3):
                block_rows = rows[block_index * 40 : (block_index + 1) * 40]
                block_sizes.append(len(block_rows))
                block_path = G_DATA_DIR / f"runtime_main_block{block_index + 1}.csv"
                with block_path.open("w", newline="", encoding="utf-8") as handle:
                    writer = csv.DictWriter(handle, fieldnames=fieldnames, extrasaction="ignore", lineterminator="\n")
                    writer.writeheader()
                    for row in block_rows:
                        writer.writerow({field: "" if g_is_blank(row.get(field, "")) else row.get(field, "") for field in fieldnames})
                block_files.append(str(block_path))
            G_MAIN_RUNTIME_STATE["files"] = block_files
            G_MAIN_RUNTIME_STATE["prepared"] = True
            g_log(f"runtime_main_sequences_shuffled count={len(rows)} block_sizes={block_sizes}")


        def g_assign_runtime_audio_probes(rows):
            for row in rows:
                row["audio_probe"] = "0"
                row["between_audio"] = ""
                row["between_audio_lock_sec"] = "0"
            probe_count = int(round(len(rows) * G_AUDIO_PROBE_RATE))
            if probe_count <= 0:
                return
            if probe_count % len(G_AUDIO_PROBE_FILES):
                raise RuntimeError(
                    f"Audio probe count {probe_count} cannot be split equally across {len(G_AUDIO_PROBE_FILES)} files"
                )
            block_start_indices = set(range(0, len(rows), G_MAIN_BLOCK_SIZE))
            candidate_indices = [index for index in range(len(rows)) if index not in block_start_indices]
            if probe_count > len(candidate_indices):
                raise RuntimeError(f"Need {probe_count} audio probe slots, only {len(candidate_indices)} are available")
            for audio_value in G_AUDIO_PROBE_FILES:
                audio_path = Path(g_path(audio_value))
                if not audio_path.is_file():
                    raise RuntimeError(f"Missing audio probe file: {audio_path}")
            per_audio_count = probe_count // len(G_AUDIO_PROBE_FILES)
            audio_bag = []
            for audio_value in G_AUDIO_PROBE_FILES:
                audio_bag.extend([audio_value] * per_audio_count)
            _gurung_random.shuffle(audio_bag)
            probe_indices = _gurung_random.sample(candidate_indices, probe_count)
            for row_index, audio_value in zip(probe_indices, audio_bag):
                rows[row_index]["audio_probe"] = "1"
                rows[row_index]["between_audio"] = audio_value
                rows[row_index]["between_audio_lock_sec"] = str(G_AUDIO_PROBE_LOCK_SEC)
            counts = {audio_value: audio_bag.count(audio_value) for audio_value in G_AUDIO_PROBE_FILES}
            g_log(f"runtime_main_audio_probes count={probe_count} counts={counts} block_start_audio=0")


        def g_runtime_main_block_file(block_index):
            if not G_MAIN_RUNTIME_STATE.get("prepared"):
                g_prepare_runtime_main_blocks()
            files = G_MAIN_RUNTIME_STATE.get("files") or []
            index = int(block_index) - 1
            if index < 0 or index >= len(files):
                raise RuntimeError(f"Invalid main block index: {block_index}")
            return files[index]


        def g_choose_speaker():
            if SpeakerDevice is None:
                return None
            try:
                devices = SpeakerDevice.getAvailableDevices()
            except Exception as err:
                g_log(f"Could not list speaker devices: {err}")
                return None
            names = [g_text(device.get("deviceName") or device.get("name")) for device in devices]
            g_log(f"Available speaker devices: {names}")
            virtual_terms = ("blackhole", "soundflower", "loopback", "aggregate", "zoom", "teams")
            preferred = []
            fallback = []
            for device in devices:
                name = g_text(device.get("deviceName") or device.get("name"))
                if not name:
                    continue
                if any(term in name.lower() for term in virtual_terms):
                    fallback.append(name)
                else:
                    preferred.append(name)
            for name in preferred + fallback:
                try:
                    speaker = SpeakerDevice(name=name, latencyClass=0)
                    g_log(f"Using speaker device: {speaker.name}")
                    return speaker
                except Exception as err:
                    g_log(f"Could not open speaker {name!r}: {err}")
            g_log("No usable speaker found; PsychoPy will use its default audio device.")
            return None


        G_SPEAKER = g_choose_speaker()
        g_init_between_images()
        g_prepare_runtime_main_blocks()


        def g_safe(value):
            text = "".join(ch if ch.isalnum() or ch in "._-" else "_" for ch in str(value))
            while "__" in text:
                text = text.replace("__", "_")
            return text.strip("._") or "item"


        def g_session_recordings_dir():
            participant = g_safe(expInfo.get("participant", "participant"))
            date_value = g_safe(expInfo.get("date") or expInfo.get("date|hid") or data.getDateStr())
            folder = G_RECORDINGS_ROOT / f"{participant}_{date_value}"
            folder.mkdir(parents=True, exist_ok=True)
            expInfo["recordings_dir"] = str(folder)
            g_log(f"recordings_dir {folder}")
            return folder


        def g_roles_and_paths():
            roles = []
            paths = []
            for idx in range(1, 5):
                image_value = globals().get(f"img{idx}", "")
                role_value = globals().get(f"img{idx}_role", f"img{idx}")
                if not g_is_blank(image_value):
                    paths.append(g_path(image_value))
                    roles.append(g_text(role_value) or f"img{idx}")
            return roles, paths


        def g_target_index(roles):
            for target_role in ("tr_target", "it_target"):
                if target_role in roles:
                    return roles.index(target_role)
            return (len(roles) - 1) / 2


        def g_next_sequence_jitter():
            bag = G_SEQUENCE_JITTER_STATE.get("bag")
            if not bag:
                bag = list(G_SEQUENCE_JITTER_POSITIONS)
                _gurung_random.shuffle(bag)
                G_SEQUENCE_JITTER_STATE["bag"] = bag
            return bag.pop()


        def g_sequence_layout(win, roles):
            sequence_count = max(1, len(roles))
            size_count = max(G_SEQUENCE_SIZE_COUNT, sequence_count)
            jitter_x_max = max(abs(pos[0]) for pos in G_SEQUENCE_JITTER_POSITIONS)
            jitter_y_max = max(abs(pos[1]) for pos in G_SEQUENCE_JITTER_POSITIONS)
            horizontal_room = max(0.1, g_window_aspect(win) - (2 * (G_SEQUENCE_X_MARGIN + jitter_x_max)))
            vertical_room = max(0.1, 1.0 - (2 * (G_SEQUENCE_Y_MARGIN + jitter_y_max)))
            width_from_horizontal = horizontal_room / (size_count + ((size_count - 1) * G_SEQUENCE_GAP_RATIO))
            image_height = min(vertical_room, width_from_horizontal / G_IMAGE_ASPECT)
            image_width = image_height * G_IMAGE_ASPECT
            gap = image_width * G_SEQUENCE_GAP_RATIO
            step = image_width + gap
            row_center = (len(roles) - 1) / 2.0
            jitter_x, jitter_y = g_next_sequence_jitter()
            positions = [((idx - row_center) * step + jitter_x, jitter_y) for idx in range(len(roles))]
            arrow_size = min(G_ARROW_MAX_SIZE, max(0.02, gap * 0.9))
            return (image_width, image_height), positions, (arrow_size, arrow_size), (jitter_x, jitter_y)


        def g_make_sequence(win, roles, paths):
            image_size, positions, arrow_size, jitter = g_sequence_layout(win, roles)
            g_log(f"make_sequence roles={roles} jitter={jitter} paths={paths}")
            images = []
            for path, pos in zip(paths, positions):
                images.append(visual.ImageStim(win, image=path, pos=pos, size=image_size, interpolate=True))
            arrows = []
            for left, right in zip(positions, positions[1:]):
                arrows.append(g_make_arrow(win, ((left[0] + right[0]) / 2, (left[1] + right[1]) / 2), arrow_size))
            return images, arrows


        def g_make_arrow(win, pos, size):
            arrow_width = float(size[0])
            arrow_height = float(size[1])
            shaft_half_height = arrow_height * 0.16
            head_back_x = arrow_width * 0.08
            left_x = -arrow_width / 2.0
            right_x = arrow_width / 2.0
            arrow_color = (-0.25, -0.25, -0.25)
            vertices = [
                (left_x, -shaft_half_height),
                (head_back_x, -shaft_half_height),
                (head_back_x, -arrow_height / 2.0),
                (right_x, 0),
                (head_back_x, arrow_height / 2.0),
                (head_back_x, shaft_half_height),
                (left_x, shaft_half_height),
            ]
            return visual.ShapeStim(
                win,
                vertices=vertices,
                pos=pos,
                fillColor=arrow_color,
                lineColor=arrow_color,
                closeShape=True,
            )


        def g_release_stims(*groups):
            for group in groups:
                if not group:
                    continue
                for stim in group:
                    try:
                        clear_textures = getattr(stim, "clearTextures", None)
                        if clear_textures is not None:
                            clear_textures()
                    except Exception as err:
                        g_log(f"stim_release_warning {err}")
            gc.collect()


        def g_draw_sequence(images, arrows, reveal_count):
            win.color = "white"
            for idx in range(reveal_count):
                images[idx].draw()
            for idx in range(max(0, reveal_count - 1)):
                arrows[idx].draw()


        def g_play_audio(path_value):
            path = g_path(path_value)
            if not path:
                return None
            g_log(f"play_audio {path}")
            if G_SPEAKER is not None:
                audio = sound.Sound(path, speaker=G_SPEAKER)
            else:
                audio = sound.Sound(path)
            audio.play()
            return audio


        class GRecorder:
            def __init__(self, root):
                self.root = Path(root)
                self.root.mkdir(exist_ok=True)
                self.stream = None
                self.segments = []
                self.current_segment = None
                self.lock = threading.Lock()
                self.write_queue = queue.Queue()
                self.close_event = threading.Event()
                self.writer = threading.Thread(target=self._writer_loop, daemon=True)
                self.writer.start()
                self.closer = threading.Thread(target=self._closer_loop, daemon=True)
                self.closer.start()

            def start(self, stem):
                self.stop()
                if not G_RECORDING_AVAILABLE:
                    return ""
                self._ensure_stream()
                path = self.root / f"{g_safe(stem)}.wav"
                segment = {"path": path, "frames": [], "stop_after": None}
                with self.lock:
                    self.segments.append(segment)
                    self.current_segment = segment
                g_log(f"rec_segment_start {path}")
                return str(path)

            def _ensure_stream(self):
                if self.stream is not None:
                    return

                def callback(indata, frames, time_info, status):
                    if status:
                        g_log(f"rec_callback_status {status}")
                    block = indata.copy()
                    with self.lock:
                        for segment in self.segments:
                            segment["frames"].append(block)

                g_log("rec_stream_open_start")
                self.stream = _gurung_sd.InputStream(
                    samplerate=48000,
                    channels=1,
                    dtype="float32",
                    callback=callback,
                )
                self.stream.start()
                g_log("rec_stream_open_done")

            def stop(self, grace_sec=None):
                if grace_sec is None:
                    grace_sec = G_RECORDING_STOP_GRACE_SEC
                with self.lock:
                    segment = self.current_segment
                    self.current_segment = None
                    if segment is not None:
                        segment["stop_after"] = core.getTime() + max(0.0, grace_sec)
                if segment is None:
                    return ""
                path = segment["path"]
                g_log(f"rec_segment_stop_requested {path} grace={grace_sec:.3f}")
                self.close_event.set()
                if grace_sec <= 0:
                    self._flush_ready_segments(force=True)
                return str(path)

            def _closer_loop(self):
                while True:
                    self.close_event.wait(0.02)
                    self.close_event.clear()
                    self._flush_ready_segments()

            def _flush_ready_segments(self, force=False):
                now = core.getTime()
                ready = []
                with self.lock:
                    remaining = []
                    for segment in self.segments:
                        stop_after = segment.get("stop_after")
                        if stop_after is not None and (force or now >= stop_after):
                            ready.append(segment)
                        else:
                            remaining.append(segment)
                    self.segments = remaining
                for segment in ready:
                    path = segment["path"]
                    frames = list(segment["frames"])
                    if frames:
                        g_log(f"rec_segment_queue_write {path} frames={len(frames)}")
                        self.write_queue.put((str(path), frames))

            def _writer_loop(self):
                while True:
                    item = self.write_queue.get()
                    if item is None:
                        return
                    path, frames = item
                    try:
                        audio = _gurung_np.concatenate(frames, axis=0)
                        _gurung_sf.write(path, audio, 48000)
                        g_log(f"rec_segment_written {path}")
                    except Exception as err:
                        g_log(f"rec_segment_write_failed {path}: {err}")

            def abort(self):
                self.stop(grace_sec=0.0)
                self._flush_ready_segments(force=True)
                stream = self.stream
                self.stream = None
                if stream is not None:
                    def close_stream():
                        try:
                            g_log("rec_stream_abort_start")
                            stream.abort()
                            g_log("rec_stream_abort_done")
                        except Exception as err:
                            g_log(f"rec_stream_abort_failed {err}")
                        try:
                            stream.close()
                            g_log("rec_stream_close_done")
                        except Exception as err:
                            g_log(f"rec_stream_close_failed {err}")

                    threading.Thread(target=close_stream, daemon=True).start()


        def g_cleanup():
            try:
                G_RECORDER.abort()
            except Exception as err:
                g_log(f"Recorder cleanup failed: {err}")
            try:
                if G_SPEAKER is not None:
                    G_SPEAKER.close()
            except Exception as err:
                g_log(f"Speaker cleanup failed: {err}")


        G_RECORDINGS_DIR = g_session_recordings_dir()
        G_RECORDER = GRecorder(G_RECORDINGS_DIR)
      Begin Routine:
        win.color = "white"
        instruction_icon = visual.ImageStim(win, image=g_path("Stimuli/sound.png"), pos=(0, 0), size=(0.22, 0.22), interpolate=True)
        instruction_audio = g_play_audio("Audio/sequence_instr.wav")
        event.clearEvents()
      Each Frame:
        instruction_icon.draw()
        keys = event.getKeys(keyList=["space", "return", "escape"])
        if "escape" in keys:
            core.quit()
        if "return" in keys:
            if instruction_audio:
                instruction_audio.stop()
            instruction_audio = g_play_audio("Audio/sequence_instr.wav")
        if "space" in keys:
            if instruction_audio:
                instruction_audio.stop()
            continueRoutine = False
  Routine PracticeTrial
    RoutineSettingsComponent PracticeTrial
      color = $[1,1,1]
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    ImageComponent PracticeTrial_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent practice_trial_code
      Code Type = Py
      Begin Routine:
        G_PRACTICE_TRIAL_INDEX += 1
        win.color = "white"
        practice_between_image = g_text(globals().get("between_image", "")) or g_next_between_image()
        practice_previous_trial_index = G_PRACTICE_TRIAL_INDEX - 1
        practice_between_audio_value = g_text(G_PRACTICE_AFTER_TRIAL_AUDIO.get(practice_previous_trial_index, ""))
        practice_between_uses_speaker = practice_previous_trial_index in G_PRACTICE_SPEAKER_SCREEN_AFTER_TRIALS
        practice_between_display_image = G_AUDIO_SPEAKER_IMAGE if practice_between_uses_speaker else practice_between_image
        practice_placeholder = (
            g_audio_speaker_image(win) if practice_between_uses_speaker else g_fullscreen_image(win, practice_between_image)
        )
        practice_roles, practice_paths = g_roles_and_paths()
        practice_images = []
        practice_arrows = []
        practice_segment = 0
        practice_phase = "between"
        practice_between_clock = core.Clock()
        practice_between_audio = None
        practice_between_audio_lock = G_AUDIO_PROBE_LOCK_SEC if practice_between_audio_value else 0.0
        practice_after_placeholder = None
        practice_after_between_image = ""
        practice_after_between_clock = core.Clock()
        practice_after_between_lock = 0.0
        practice_audio = None
        practice_audio_value = ""
        practice_audio_clock = core.Clock()
        practice_audio_duration = 0
        practice_segment_audio_value = ""
        practice_segment_audio_started = False
        practice_segment_audio_lock = 0.0
        if practice_between_audio_value:
            practice_between_audio = g_play_audio(practice_between_audio_value)
        practice_between_clock.reset()
        thisExp.addData("practice_trial_index", G_PRACTICE_TRIAL_INDEX)
        thisExp.addData("practice_between_image", g_path(practice_between_display_image))
        thisExp.addData("practice_between_audio", g_path(practice_between_audio_value) if practice_between_audio_value else "")
        event.clearEvents()
      Each Frame:
        if practice_phase == "between":
            practice_placeholder.draw()
            keys = event.getKeys(keyList=["space", "escape"])
            if "escape" in keys:
                G_RECORDER.abort()
                core.quit()
            if "space" in keys and practice_between_clock.getTime() >= practice_between_audio_lock:
                if practice_between_audio:
                    practice_between_audio.stop()
                thisExp.addData("practice_between_rt", practice_between_clock.getTime())
                g_release_fullscreen_image(practice_placeholder)
                practice_placeholder = None
                practice_images, practice_arrows = g_make_sequence(win, practice_roles, practice_paths)
                practice_pre_audio_value = g_practice_pre_picture_audio(G_PRACTICE_TRIAL_INDEX, practice_segment, len(practice_images))
                if practice_pre_audio_value:
                    practice_phase = "practice_audio"
                    practice_audio_value = practice_pre_audio_value
                    practice_audio = g_play_audio(practice_audio_value)
                    practice_audio_clock.reset()
                    practice_audio_duration = g_float(practice_audio.getDuration(), 0) if practice_audio else 0
                    thisExp.addData(f"practice_seg{practice_segment + 1}_pre_audio", g_path(practice_audio_value))
                else:
                    practice_phase = "segment"
                    practice_segment_audio_value = g_practice_picture_audio(G_PRACTICE_TRIAL_INDEX, practice_segment)
                    practice_segment_audio_started = False
                    practice_segment_audio_lock = 0.0
                    practice_stem = f"{expInfo['participant']}_practice_{G_PRACTICE_TRIAL_INDEX:02d}_pic{practice_segment + 1:02d}_{practice_roles[practice_segment]}"
                    G_RECORDER.start(practice_stem)
                event.clearEvents()
        elif practice_phase == "segment":
            g_draw_sequence(practice_images, practice_arrows, practice_segment + 1)
            if practice_segment_audio_value and not practice_segment_audio_started:
                practice_audio_value = practice_segment_audio_value
                practice_audio = g_play_audio(practice_audio_value)
                practice_audio_clock.reset()
                practice_segment_audio_lock = g_float(practice_audio.getDuration(), 0) if practice_audio else 0
                practice_segment_audio_started = True
                thisExp.addData(f"practice_seg{practice_segment + 1}_onset_audio", g_path(practice_audio_value))
            keys = event.getKeys(keyList=["space", "escape"])
            if "escape" in keys:
                G_RECORDER.abort()
                core.quit()
            if "space" in keys and practice_audio_clock.getTime() >= practice_segment_audio_lock:
                if practice_audio:
                    practice_audio.stop()
                practice_audio = None
                audio_file = G_RECORDER.stop()
                seg = practice_segment + 1
                thisExp.addData(f"practice_seg{seg}_role", practice_roles[practice_segment])
                thisExp.addData(f"practice_seg{seg}_audio", audio_file)
                if practice_segment >= len(practice_images) - 1:
                    practice_audio_value = g_text(G_PRACTICE_AFTER_TRIAL_AUDIO.get(G_PRACTICE_TRIAL_INDEX, ""))
                    if practice_audio_value and G_PRACTICE_TRIAL_INDEX >= G_PRACTICE_TRIAL_COUNT:
                        practice_phase = "practice_after_between"
                        practice_after_between_image = g_next_between_image()
                        practice_after_placeholder = g_fullscreen_image(win, practice_after_between_image)
                        practice_audio = g_play_audio(practice_audio_value)
                        practice_audio_clock.reset()
                        practice_after_between_clock.reset()
                        practice_after_between_lock = G_AUDIO_PROBE_LOCK_SEC
                        thisExp.addData("practice_after_trial_audio", g_path(practice_audio_value))
                        thisExp.addData("practice_after_trial_between_image", g_path(practice_after_between_image))
                    else:
                        continueRoutine = False
                else:
                    practice_segment += 1
                    practice_pre_audio_value = g_practice_pre_picture_audio(G_PRACTICE_TRIAL_INDEX, practice_segment, len(practice_images))
                    if practice_pre_audio_value:
                        practice_phase = "practice_audio"
                        practice_audio_value = practice_pre_audio_value
                        practice_audio = g_play_audio(practice_audio_value)
                        practice_audio_clock.reset()
                        practice_audio_duration = g_float(practice_audio.getDuration(), 0) if practice_audio else 0
                        thisExp.addData(f"practice_seg{practice_segment + 1}_pre_audio", g_path(practice_audio_value))
                    else:
                        practice_segment_audio_value = g_practice_picture_audio(G_PRACTICE_TRIAL_INDEX, practice_segment)
                        practice_segment_audio_started = False
                        practice_segment_audio_lock = 0.0
                        practice_stem = f"{expInfo['participant']}_practice_{G_PRACTICE_TRIAL_INDEX:02d}_pic{practice_segment + 1:02d}_{practice_roles[practice_segment]}"
                        G_RECORDER.start(practice_stem)
                event.clearEvents()
        elif practice_phase == "practice_audio":
            g_draw_sequence(practice_images, practice_arrows, practice_segment)
            if practice_audio_clock.getTime() >= practice_audio_duration:
                if practice_audio:
                    practice_audio.stop()
                practice_audio = None
                practice_phase = "segment"
                practice_segment_audio_value = g_practice_picture_audio(G_PRACTICE_TRIAL_INDEX, practice_segment)
                practice_segment_audio_started = False
                practice_segment_audio_lock = 0.0
                practice_stem = f"{expInfo['participant']}_practice_{G_PRACTICE_TRIAL_INDEX:02d}_pic{practice_segment + 1:02d}_{practice_roles[practice_segment]}"
                G_RECORDER.start(practice_stem)
                event.clearEvents()
        elif practice_phase == "practice_after_between":
            practice_after_placeholder.draw()
            keys = event.getKeys(keyList=["space", "escape"])
            if "escape" in keys:
                G_RECORDER.abort()
                core.quit()
            if "space" in keys and practice_after_between_clock.getTime() >= practice_after_between_lock:
                if practice_audio:
                    practice_audio.stop()
                practice_audio = None
                g_release_fullscreen_image(practice_after_placeholder)
                practice_after_placeholder = None
                continueRoutine = False
                event.clearEvents()
      End Routine:
        G_RECORDER.stop()
        if practice_between_audio:
            practice_between_audio.stop()
        if practice_audio:
            practice_audio.stop()
        g_release_stims(practice_images, practice_arrows)
        g_release_fullscreen_image(practice_placeholder)
        g_release_fullscreen_image(practice_after_placeholder)
        practice_images = []
        practice_arrows = []
        practice_placeholder = None
        practice_after_placeholder = None
  Routine PracticeEnd
    RoutineSettingsComponent PracticeEnd
      color = $[1,1,1]
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    ImageComponent PracticeEnd_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent practice_end_code
      Code Type = Py
      Begin Routine:
        win.color = "white"
        practice_done_icon = visual.ImageStim(win, image=g_path("Stimuli/sound.png"), pos=(0, 0), size=(0.22, 0.22), interpolate=True)
        practice_done_audio = g_play_audio("Audio/practice_end.wav")
        practice_done_clock = core.Clock()
        practice_done_duration = g_float(practice_done_audio.getDuration() if practice_done_audio else 0, 0.0)
        event.clearEvents()
      Each Frame:
        practice_done_icon.draw()
        keys = event.getKeys(keyList=["space", "escape"])
        if "escape" in keys:
            core.quit()
        if "space" in keys and practice_done_clock.getTime() >= practice_done_duration:
            if practice_done_audio:
                practice_done_audio.stop()
            continueRoutine = False
  Routine MainTrial
    RoutineSettingsComponent MainTrial
      color = $[1,1,1]
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    ImageComponent MainTrial_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent main_trial_code
      Code Type = Py
      Begin Routine:
        G_MAIN_TRIAL_INDEX += 1
        win.color = "white"
        main_between_image = g_next_between_image()
        main_placeholder = g_fullscreen_image(win, main_between_image)
        main_roles, main_paths = g_roles_and_paths()
        main_images = []
        main_arrows = []
        main_segment = 0
        main_phase = "between"
        main_between_clock = core.Clock()
        main_between_audio = None
        main_between_audio_value = g_text(globals().get("between_audio", ""))
        main_audio_lock = g_float(globals().get("between_audio_lock_sec", 0), 0.0)
        main_dataset_number = g_int(globals().get("dataset_number", 0), 0)
        main_condition_id = g_text(globals().get("condition_id", "unknown_condition"))
        if main_between_audio_value:
            main_between_audio = g_play_audio(main_between_audio_value)
        main_between_clock.reset()
        thisExp.addData("main_trial_index", G_MAIN_TRIAL_INDEX)
        thisExp.addData("between_image", g_path(main_between_image))
        thisExp.addData("audio_probe", audio_probe)
        thisExp.addData("between_audio", g_path(main_between_audio_value) if main_between_audio_value else "")
        event.clearEvents()
      Each Frame:
        if main_phase == "between":
            main_placeholder.draw()
            keys = event.getKeys(keyList=["space", "escape"])
            if "escape" in keys:
                G_RECORDER.abort()
                core.quit()
            if "space" in keys and main_between_clock.getTime() >= main_audio_lock:
                if main_between_audio:
                    main_between_audio.stop()
                thisExp.addData("between_rt", main_between_clock.getTime())
                g_release_fullscreen_image(main_placeholder)
                main_placeholder = None
                main_images, main_arrows = g_make_sequence(win, main_roles, main_paths)
                main_phase = "segment"
                main_stem = f"{expInfo['participant']}_main_imageset{main_dataset_number:02d}_condition_{main_condition_id}_pic{main_segment + 1:02d}_{main_roles[main_segment]}"
                G_RECORDER.start(main_stem)
                event.clearEvents()
        elif main_phase == "segment":
            g_draw_sequence(main_images, main_arrows, main_segment + 1)
            keys = event.getKeys(keyList=["space", "escape"])
            if "escape" in keys:
                G_RECORDER.abort()
                core.quit()
            if "space" in keys:
                audio_file = G_RECORDER.stop()
                seg = main_segment + 1
                thisExp.addData(f"seg{seg}_role", main_roles[main_segment])
                thisExp.addData(f"seg{seg}_audio", audio_file)
                if main_segment >= len(main_images) - 1:
                    continueRoutine = False
                else:
                    main_segment += 1
                    main_stem = f"{expInfo['participant']}_main_imageset{main_dataset_number:02d}_condition_{main_condition_id}_pic{main_segment + 1:02d}_{main_roles[main_segment]}"
                    G_RECORDER.start(main_stem)
                event.clearEvents()
      End Routine:
        G_RECORDER.stop()
        if main_between_audio:
            main_between_audio.stop()
        g_release_stims(main_images, main_arrows)
        g_release_fullscreen_image(main_placeholder)
        main_images = []
        main_arrows = []
        main_placeholder = None
  Routine Break
    RoutineSettingsComponent Break
      color = $[1,1,1]
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    ImageComponent Break_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent break_code
      Code Type = Py
      Begin Routine:
        win.color = "white"
        break_image = visual.ImageStim(win, image=g_path("Stimuli/break.png"), pos=(0, 0), size=(0.55, 0.55), interpolate=True)
        break_clock = core.Clock()
        event.clearEvents()
      Each Frame:
        break_image.draw()
        keys = event.getKeys(keyList=["space", "escape"])
        if "escape" in keys:
            core.quit()
        if "space" in keys and break_clock.getTime() >= 30:
            continueRoutine = False
  Routine EndExperiment
    RoutineSettingsComponent EndExperiment
      color = $[1,1,1]
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    ImageComponent EndExperiment_keep_alive
      image = Stimuli/sound.png
      opacity = 0
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        win.color = "white"
        finish_image = visual.ImageStim(win, image=g_path("Stimuli/finish.png"), pos=(0, 0), size=(0.55, 0.55), interpolate=True)
        finish_clock = core.Clock()
        event.clearEvents()
      Each Frame:
        finish_image.draw()
        keys = event.getKeys(keyList=["space", "escape"])
        if "escape" in keys or "space" in keys or finish_clock.getTime() >= 10:
            g_cleanup()
            continueRoutine = False
Flow
  Routine Instructions
  LoopInitiator PracticeLoop loopType="TrialHandler"
    conditionsFile = Conds/practice.csv
    loopType = sequential
    nReps = 1
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    Routine PracticeTrial
  LoopTerminator PracticeLoop
  Routine PracticeEnd
  LoopInitiator MainBlock1 loopType="TrialHandler"
    conditionsFile = $g_runtime_main_block_file(1)
    loopType = sequential
    nReps = 1
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    Routine MainTrial
  LoopTerminator MainBlock1
  Routine Break
  LoopInitiator MainBlock2 loopType="TrialHandler"
    conditionsFile = $g_runtime_main_block_file(2)
    loopType = sequential
    nReps = 1
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    Routine MainTrial
  LoopTerminator MainBlock2
  Routine Break
  LoopInitiator MainBlock3 loopType="TrialHandler"
    conditionsFile = $g_runtime_main_block_file(3)
    loopType = sequential
    nReps = 1
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    Routine MainTrial
  LoopTerminator MainBlock3
  Routine EndExperiment
